PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      fillColor = white
      size = 0.1,0.1
      shape = cross
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    TextComponent target
      startVal [time (s)] = 0
      pos [set every repeat] = random()-0.5, random()-0.5
      text = T
      letterHeight = 0.05
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        num_distr = 5 if random() > 0.5 else 10
        thisExp.addData('num_distr', num_distr)

        distractors = []

        for i in range(num_distr):
            distr = visual.TextStim(
                win=win,
                name='distr',
                text='L',
                font='Arial',
                pos=(random()-0.5, random()-0.5),
                draggable=False,
                height=0.05,
                wrapWidth=None,
                ori=randint(0,360),
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=-2.0
            )
            distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      startVal [time (s)] = 0
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      timeRelativeTo = routine
      clickable = target
      saveParamsClickable [set every repeat] = name,
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  Routine instructions
    RoutineSettingsComponent instructions
      disabled = True
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    TextComponent text
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Your task is to find T amongst the L's. Press space to continue. There are 200 trials. 
      letterHeight = 0.05
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    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
